<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

  <!-- read incoming acquisition data : deserialization -->
  <reader>
    <slot>1008</slot>
    <dll>gadgetron_mricore</dll>
    <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
  </reader>

  <!-- write outgoing image data -->
   <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriterFLOAT</classname>
    </writer>
	
	<!-- first try - normal AccumulatorGadget -->
  <gadget>
    <name>Accumulator</name>
    <dll>CS_LAB</dll>
    <classname>CS_AccumulatorGadget</classname>
  </gadget>

  <!-- CS reconstruction -->
  <!-- FOCUSS iterations - default: 2 										-->
  <!-- CG Iterations - default: 20 											-->
  <!-- Lambda - default: 0.01 												-->
  <!-- Lambda ESPReSSo - default: 0.02 										-->
  <!-- Kernel FFT dimensions - bit-mask - 1:x, 2:y,.. 						-->
  <!-- Kernel Sparsifying dimensions - bit-mask - 1:x, 2:y,.. 				-->
  <!-- Sparsifying Transform for each direction 							-->
  <!-- KernelTrafo - is kSpace trafo active 								-->
  <!-- fft in read direction 												-->
  <!-- FOCUSS output: kSpace = 1, Image = 0 								-->
  <!-- use ESPReSSo constraint for normal CS acquisitions - default: 0  -->
  <gadget>
    <name>FOCUSS</name>
    <dll>CS_LAB</dll>  
	  <classname>CS_LAB</classname>
	  <property><name>bXMLControl</name><value>1</value></property>
	  <property><name>lambda</name><value>0.01</value></property>
	  <property><name>lambdaESPReSSo</name><value>0</value></property>
	  <property><name>OuterIterations</name><value>1</value></property>
	  <property><name>InnerIterations</name><value>1</value></property>
	  <property><name>kernelFftDim</name><value>3</value></property>
	  <property><name>fftSparseDim</name><value>3</value></property>
	  <property><name>dctSparseDim</name><value>0</value></property>
	  <property><name>pcaSparseDim</name><value>0</value></property>
	  <property><name>scrambleDim</name><value>3</value></property>
	  <property><name>transformFftBaDim</name><value>4</value></property>
	  <property><name>kSpaceOutDim</name><value>0</value></property>
	  <property><name>CSESPReSSo</name><value>0</value></property>
  </gadget>
  
	<!-- combine the channel data to one image - Mode 0: Unweighted Combine (CPLX data) - 1: Selfweighted Combine (real data only!) -->
    <gadget>
      <name>Combine</name>
      <dll>CS_LAB</dll>
      <classname>CS_CombineGadget</classname>
    </gadget>

	<!-- extract components like (magnitude: 1, real: 2, imag: 4, phase:8 or combine: 9 for magnitude and phase) -->
    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
	  <property><name>extract_mask</name><value>1</value></property>
    </gadget>  

	<gadget>
		<name>Registration</name>
		<dll>CS_LAB</dll>
		<classname>RegistrationGadget</classname>
		<property><name>PathParam</name><value>D:/Programme/Gadgetron/gadgetron/registration_parameter/elastixParam.txt</value></property>
		<property><name>PathLog</name><value>D:/Programme/elastix</value></property>
	</gadget>
	
	<gadget>
		<name>SaveHDFImg</name>
		<dll>gadgetron_mricore</dll>
		<classname>ImageSaveHDFGadgetFLOAT</classname>
		<property><name>file_prefix</name><value>T</value></property>
		<property><name>file_path</name><value>D:\</value></property>
		<property><name>append_timestamp</name><value>1</value></property>
	</gadget>	
	
	<gadget>
		<name>Slicer</name>
		<dll>CS_LAB</dll>
		<classname>SlicerGadget</classname>		
	</gadget>
	
<gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadgetFLOAT</classname>
    </gadget>
</gadgetronStreamConfiguration>
